PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = rdm_test
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Routines
  Routine welcomeScreen
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        <Insert Instructions Here>

        Press any key to start the experiment.
    KeyboardComponent welcomeResponse
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine endScreen
    TextComponent textEndScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Thank you for your time. Press any key to exit.
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    KeyboardComponent keyEndScreenResponse
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trialCoherentMotion
    DotsComponent dotsCoherent
      coherence [set every repeat] = Coherence
      dir [set every repeat] = Direction
      dotLife = 3
      dotSize = 6
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 118
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.9
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    KeyboardComponent responseCoherent
      allowedKeys = 'left','right'
      correctAns = $CorrectAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.9
      store = first key
      storeCorrect = True
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  Routine trialIncoherentMotion
    DotsComponent dotsIncoherent
      coherence = 0.0
      dir = 0.0
      dotLife = 3
      dotSize = 6
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 118
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $IncoherentMotionTime
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Flow
  Routine welcomeScreen
  Routine blank500
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loopTemplate.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Coherence', 0.3), ('Direction', 180), ('IncoherentMotionTime', 3.1), ('CorrectAns', 'left')]),
      OrderedDict([('Coherence', 0.3), ('Direction', 180), ('IncoherentMotionTime', 4.2), ('CorrectAns', 'left')]),
      OrderedDict([('Coherence', 0.3), ('Direction', 180), ('IncoherentMotionTime', 5.7), ('CorrectAns', 'left')]),
      OrderedDict([('Coherence', 0.3), ('Direction', 0), ('IncoherentMotionTime', 3.1), ('CorrectAns', 'right')]),
      OrderedDict([('Coherence', 0.3), ('Direction', 0), ('IncoherentMotionTime', 4.2), ('CorrectAns', 'right')]),
      OrderedDict([('Coherence', 0.3), ('Direction', 0), ('IncoherentMotionTime', 5.7), ('CorrectAns', 'right')]),
      OrderedDict([('Coherence', 0.4), ('Direction', 180), ('IncoherentMotionTime', 3.1), ('CorrectAns', 'left')]),
      OrderedDict([('Coherence', 0.4), ('Direction', 180), ('IncoherentMotionTime', 4.2), ('CorrectAns', 'left')]),
      OrderedDict([('Coherence', 0.4), ('Direction', 180), ('IncoherentMotionTime', 5.7), ('CorrectAns', 'left')]),
      OrderedDict([('Coherence', 0.4), ('Direction', 0), ('IncoherentMotionTime', 3.1), ('CorrectAns', 'right')]),
      OrderedDict([('Coherence', 0.4), ('Direction', 0), ('IncoherentMotionTime', 4.2), ('CorrectAns', 'right')]),
      OrderedDict([('Coherence', 0.4), ('Direction', 0), ('IncoherentMotionTime', 5.7), ('CorrectAns', 'right')])]
    Routine trialCoherentMotion
    Routine trialIncoherentMotion
  LoopTerminator trials
  Routine blank500
  Routine endScreen
